PsychoPy2experiment version="2021.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = ldt_en_hi
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Routines
  Routine rest
    KeyboardComponent restresp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine instr
    TextboxComponent eninstrstim
      bold = False
      editable = False
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Instructions:

        A pair of commonly used english words will be flashed on the screen.
        Press the right arrow key if both the words are valid english words.
        Press the left arrow key if either one of the words or both words are not valid english words.

        Press left/right keys to try out few examples.
    KeyboardComponent enkbinstr
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine en_warmup
    TextboxComponent enwarmupw1
      anchor = top-center
      bold = False
      editable = False
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      text [set every repeat] = $w_word1
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    TextboxComponent enwarmupw2
      anchor = bottom-center
      bold = False
      editable = False
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      text [set every repeat] = $w_word2
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    KeyboardComponent enwarmupkb
      allowedKeys = 'left','right'
      correctAns = $w_corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine startexp
    TextboxComponent startexpprompt
      anchor = top-center
      bold = False
      editable = False
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Press left/right arrow key to start the experiment.
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    KeyboardComponent startexpkbresp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thanks
    TextboxComponent thankstext
      bold = False
      editable = False
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Thank you for participating in the study! :)
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  Routine hi_instr
    TextboxComponent hiinstrstim
      bold = False
      editable = False
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now, A pair of hindi-english word will be flashed on the screen.
        Press the right arrow key if both the words are valid words.
        Press the left arrow key if either one of the words or both words are not valid words.

        Press left/right keys to try out few examples.
    KeyboardComponent hikbinstr
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine hi_warmup
    TextboxComponent hiwarmupw1
      anchor = top-center
      bold = False
      editable = False
      font = Noto Sans Devanagari
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      text [set every repeat] = $w_hword1
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    TextboxComponent hiwarmupw2
      anchor = bottom-center
      bold = False
      editable = False
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      text [set every repeat] = $w_hword2
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    KeyboardComponent hiwarmupkb
      allowedKeys = 'left','right'
      correctAns = $w_hcorrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine trial1
    TextboxComponent entrialw1
      anchor = top-center
      bold = False
      editable = False
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.8
      text [set every repeat] = $word1
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    TextboxComponent entrialw2
      anchor = bottom-center
      bold = False
      editable = False
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.8
      text [set every repeat] = $word2
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    KeyboardComponent enkbresp
      allowedKeys = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      storeCorrect = True
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  Routine trail2
    TextboxComponent hitrialw1
      anchor = top-center
      bold = False
      editable = False
      font = Noto Sans Devanagari
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.8
      text [set every repeat] = $hword1
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    TextboxComponent hitrialw2
      anchor = bottom-center
      bold = False
      editable = False
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.8
      text [set every repeat] = $hword2
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    KeyboardComponent hikbresp
      allowedKeys = 'left','right'
      correctAns = $hcorrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      storeCorrect = True
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Flow
  Routine instr
  LoopInitiator enwarmuptrials loopType="TrialHandler"
    conditionsFile = dataset/en_warmupconditions.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('w_word1', 'whistle'), ('w_word2', 'england'), ('w_corrAns', 'right'), ('w_category', 2)]),
      OrderedDict([('w_word1', 'ash'), ('w_word2', 'ashtray'), ('w_corrAns', 'right'), ('w_category', 1)]),
      OrderedDict([('w_word1', 'fite'), ('w_word2', 'crack'), ('w_corrAns', 'left'), ('w_category', 4)]),
      OrderedDict([('w_word1', 'sun'), ('w_word2', 'cepy'), ('w_corrAns', 'left'), ('w_category', 5)]),
      OrderedDict([('w_word1', 'mick'), ('w_word2', 'lofy'), ('w_corrAns', 'left'), ('w_category', 3)])]
    Routine en_warmup
    Routine rest
  LoopTerminator enwarmuptrials
  Routine startexp
  Routine rest
  LoopInitiator en_trials loopType="TrialHandler"
    conditionsFile = dataset/en_conditions.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'word1': 'actress', 'word2': 'actor', 'corrAns': 'right', 'category': 1},
      {'word1': 'subtraction', 'word2': 'addition', 'corrAns': 'right', 'category': 1},
      {'word1': 'continent', 'word2': 'africa', 'corrAns': 'right', 'category': 1},
      {'word1': 'explanation', 'word2': 'answer', 'corrAns': 'right', 'category': 1},
      {'word1': 'octopus', 'word2': 'arms', 'corrAns': 'right', 'category': 1},
      {'word1': 'bow', 'word2': 'arrow', 'corrAns': 'right', 'category': 1},
      {'word1': 'mustache', 'word2': 'beard', 'corrAns': 'right', 'category': 1},
      {'word1': 'mug', 'word2': 'beer', 'corrAns': 'right', 'category': 1},
      {'word1': 'disbelieve', 'word2': 'believe', 'corrAns': 'right', 'category': 1},
      {'word1': 'tricycle', 'word2': 'bicycle', 'corrAns': 'right', 'category': 1},
      {'word1': 'magazine', 'word2': 'book', 'corrAns': 'right', 'category': 1},
      {'word1': 'busy', 'word2': 'bored', 'corrAns': 'right', 'category': 1},
      {'word1': 'cauliflower', 'word2': 'broccoli', 'corrAns': 'right', 'category': 1},
      {'word1': 'sister', 'word2': 'brother', 'corrAns': 'right', 'category': 1},
      {'word1': 'tumor', 'word2': 'cancer', 'corrAns': 'right', 'category': 1},
      {'word1': 'rug', 'word2': 'carpet', 'corrAns': 'right', 'category': 1},
      {'word1': 'blackboard', 'word2': 'chalk', 'corrAns': 'right', 'category': 1},
      {'word1': 'kitchen', 'word2': 'cook', 'corrAns': 'right', 'category': 1},
      {'word1': 'policeman', 'word2': 'cop', 'corrAns': 'right', 'category': 1},
      {'word1': 'lobster', 'word2': 'crab', 'corrAns': 'right', 'category': 1}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
    Routine trial1
    Routine rest
  LoopTerminator en_trials
  Routine hi_instr
  LoopInitiator hiwarmuptrials loopType="TrialHandler"
    conditions = [OrderedDict([('w_hword1', 'नेता'), ('w_hword2', 'follower'), ('w_hcorrAns', 'right'), ('w_hcategory', 6)])]
    conditionsFile = dataset/hi_warmupconditions.csv
    loopType = random
    nReps = 1
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    Routine hi_warmup
    Routine rest
  LoopTerminator hiwarmuptrials
  Routine startexp
  LoopInitiator hi_trials loopType="TrialHandler"
    loopType = random
    nReps = 2
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    Routine trail2
    Routine rest
  LoopTerminator hi_trials
  Routine thanks
